PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s%s_%s%s_%s_%s' % (expInfo['gender (M/F)'], expInfo['number (1-12)'], 'session', expInfo['session (1-2)'], expName, expInfo['date'])
  Experiment info = {'gender (M/F)': '', 'number (1-12)': '', 'session (1-2)': ''}
  Full-screen window = True
  Monitor = sallestim
  Screen = 1
  Units = cm
  Window size (pixels) = [1920, 1080]
  expName = moose_adapt250_stim_20260309_w_mouse
  logging level = debug
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Routines
  Routine Fixation
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        win.mouseVisible = false;
      Begin Routine:
        # Hide cursor
        win.mouseVisible = False

        # Fixation cross
        fix_size = 1.6

        # Stimuli
        hor_line = visual.Line(win,  start=(-fix_size, 0), end=(fix_size, 0), lineWidth=5, units="cm")
        ver_line = visual.Line(win,  start=(0, -fix_size), end=(0, fix_size), lineWidth=5, units="cm")

        # Start timer
        fixation_timer = core.Clock()

        # Enter the counter for this trial
        thisExp.addData('block_nb', block_nb)
        thisExp.addData('total_trial_nb', total_trial_nb)
        thisExp.addData('this_block_trial_nb', this_block_trial_nb)
        thisExp.addData('correct_trial_nb', correct_trial_nb)

        # Enter the type of block
        thisExp.addData('block_type', block_type)

        # get the absolute time
        thisExp.addData('absolute_time', tThisFlipGlobal)
        thisExp.addData('stim_time', tThisFlipGlobal - tStimStartTime)
      Each Frame:
        while fixation_timer.getTime() < 0.5:
            hor_line.draw()
            ver_line.draw()
            win.flip()
  Routine Initiate
    CodeComponent code_3
      Code Type = Both
      Before Experiment:
        from psychopy import gui, core, event, visual, sound
        import json
        import pandas as pd
        import random
        from starstim_controller import StarstimController

        # Choose the language for the experiment
        dlg = gui.Dlg(title="Select Language")
        dlg.addField("Language:", choices=["French", "English"])
        ok_data = dlg.show()
        if not dlg.OK:
            core.quit()
        language = ok_data[0]

        # Import the texts
        if language == 'English':
            with open('moose_english.json', 'r', encoding="utf-8") as file:
                dt_txt = json.load(file)
        else:
            with open('moose_french.json', 'r', encoding="utf-8") as file:
                dt_txt = json.load(file)
      Begin Experiment:
        # Hide cursor
        win.mouseVisible = False

        # preload the .wav file
        bellowSound = sound.Sound('bellow50.wav')

        # first bip sound
        sound_2 = sound.Sound('A', secs=0.5, hamming=True, name='sound_2')
        sound_2.setVolume(1, log=False)

        # Prepare the warning text holder
        warning_text = visual.TextStim(win, text="", color="white", height=0.8)

        # Rescale for MacBook
        # Only the mouse position needs to be rescaled. The rest is OK
        monitor_pxl_size = win.monitor.getSizePix()
        window_pxl_size = win.size
        scaling_x = monitor_pxl_size[0]/window_pxl_size[0]
        scaling_y = monitor_pxl_size[0]/window_pxl_size[0]

        # check window and monitor size (in pixels) and monitor width (in cm)
        print("Window size (px):", win.size)
        print("Monitor size (px):", win.monitor.getSizePix())
        print("Width (cm):", win.monitor.getWidth())

        # Define circular area
        circle_center = (0,0)  # x,y
        circle_radius = 1.85  # cm

        # Define distance from center for anticipated below
        distance_for_anticipated_below = 2.35 # cm

        # Scale
        x_min, x_max, y_pos = -10, 10, 0
        scale_line = visual.Line(win, start=(x_min, y_pos), end=(x_max, y_pos), lineWidth=2, units="cm")

        # Ticks of the scale
        n_ticks = 11
        ticks = []
        for i in range(n_ticks):
            x = x_min + i*(x_max-x_min)/(n_ticks-1)
            ticks.append(visual.Line(win, start=(x, y_pos-0.1), end=(x, y_pos+0.1), lineWidth=2))

        # Labels of the scale
        general_label = visual.TextStim(win, text=dt_txt['text_general_label'],
                                      pos=(x_min, y_pos+2.0), height=0.6, anchorHoriz='left', alignText='left')
        left_label = visual.TextStim(win, text=dt_txt['text_left_label'], pos=(x_min, y_pos-1), height=0.6, anchorHoriz='left', alignText='left', anchorVert='top')
        center_label  = visual.TextStim(win, text=dt_txt['text_center_label'], pos=(0, y_pos-1), height=0.6, alignText='center', anchorVert='top')
        right_label = visual.TextStim(win, text=dt_txt['text_right_label'],
                                      pos=(x_max, y_pos-1), height=0.6, anchorHoriz='right', alignText='right', anchorVert='top')

        # Red cross (invisible before the click)
        red_x = visual.TextStim(win, text="X", color="red", height=1, pos=(0, y_pos), opacity=0.0)

        # Initialize counter
        block_nb = -1
        total_trial_nb = 0
        this_block_trial_nb = 0
        correct_trial_nb = 0
      Begin Routine:
        # Stimulation protocol (Double blind)
        df_blind = pd.read_csv('blind/double_blind.csv')
        participant = expInfo['gender (M/F)']+expInfo['number (1-12)']
        session = 'Session' + expInfo['session (1-2)']
        stimulation_type = df_blind.loc[df_blind['Participant'] == participant, session].iloc[0]
        # print(stimulation_type)

        # In order to stop properly the stimulation, modify the original core_quit()
        # _originalCoreQuit = core.quit
        # def myQuit(*args, **kwargs):
        #     print("Aborting the stimulation.")
        #     try:
        #         stim.abort_protocol()
        #     except:
        #         pass

        #     try:
        #         stim.unload_protocol()
        #     except:
        #         pass

        #     try:
        #         stim.close()
        #     except:
        #         pass
        #     _originalCoreQuit(*args, **kwargs)
        # core.quit = myQuit # Override core.quit globally

        # Load the stimulation protocol
        stim = StarstimController("100.1.10.2")
        try:
            stim.connect()
            stim.load_protocol(stimulation_type)
            stim.start_protocol()
        except Exception as e:
            print("EXPERIMENT ERROR:", e)
        # print('tStimStartTime')
        # print(tStimStartTime)
        # print("tStimStartTime in globals?", "tStimStartTime" in globals())
      End Routine:
        # Hide cursor
        win.mouseVisible = False
  Routine Moose
    ImageComponent moose
      image = moose.png
      saveStartStop = False
      size = (13.25, 22.7)
      startVal [time (s)] = 0
      texture resolution = 512
      units = cm
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        win.mouseVisible = true;
        mouse.setPos([(- 9.7), 0]);
      Begin Routine:
        # Set initial position (x, y) in cm
        mouse.setPos((-9.7, 0))

        # Show the cursor
        win.mouseVisible = True

        # Flags to track trial state
        trial_ended = False
        warning_shown = False

        # get the fixation time
        thisExp.addData('fixation_time', fixation_timer.getTime())

        # Start timer for 1-second limit
        moose_timer = core.Clock()

        # Schedule sound after delay
        # delay_choices = [0.2, 0.5, 0.7, 1.0, 1.2, 1.5, 2.0]  # seconds
        # sound_delay = random.choice(delay_choices)
        delay = float(sound_delay)
        if delay < 0:
            condition = 'anticipated'
        else:
            condition = 'delayed'

        # The jitter for the disappearance after the beginning of the trial
        jitter = random.randrange(-200, 200)/1000

        # Add some scheduled time
        thisExp.addData('scheduled_sound_delay', delay)
        thisExp.addData('scheduled_jitter', jitter)
      Each Frame:
        if not trial_ended:

            # Detecting cursor position and click
            x, y = mouse.getPos()
            buttons = mouse.getPressed()
            if buttons[0]:
                clickTime = moose_timer.getTime()

            # Rescaling (needed for Mac Retina screen)
            x = x * scaling_x
            y = y * scaling_y

            # Calculate distance from circle center
            dist = ((x - circle_center[0])**2 + (y - circle_center[1])**2)**0.5

            # Case 1: anticipating and cursor close to the nose
            if condition == 'anticipated' and dist <= distance_for_anticipated_below:

                # Play the sound
                bellowSound.play()
                soundOnset = moose_timer.getTime()

                # While you wait, check for a button press
                late_press = False
                while moose_timer.getTime() - soundOnset < 1+jitter:

                    if not late_press:
                        x_late, y_late = mouse.getPos()
                        buttons = mouse.getPressed()
                        if buttons[0]:
                            # print('Check this happens only once!')
                            clickTime = moose_timer.getTime()
                            x_late = x_late * scaling_x
                            y_late = y_late * scaling_y
                            late_press = True

                # Enter results:
                thisExp.addData('correct', 1)
                if late_press:
                    thisExp.addData('click', 'late')
                    thisExp.addData('clickTime', clickTime)
                    thisExp.addData('click_x', x_late)
                    thisExp.addData('click_y', y_late)
                else:
                    thisExp.addData('click', 'no_late')
                    thisExp.addData('clickTime', None)
                    thisExp.addData('click_x', None)
                    thisExp.addData('click_y', None)
                thisExp.addData('soundON', soundOnset)

                # Increment counters
                total_trial_nb += 1
                this_block_trial_nb += 1
                correct_trial_nb += 1

                # End the trial
                trial_ended = True
                # correct_trial.finished = True
                currentLoop.finished = True
                continueRoutine = False

            # Case 2: with a delay and clicking inside the nose
            elif condition == 'delayed' and (buttons[0] and dist <= circle_radius):

                # Schedule sound after delay and wait
                core.wait(delay)
                bellowSound.play()
                soundOnset = moose_timer.getTime()
                core.wait(1+jitter)

                # Enter results
                thisExp.addData('correct', 1)
                thisExp.addData('click', 'inside')
                thisExp.addData('clickTime', clickTime)
                thisExp.addData('click_x', x)
                thisExp.addData('click_y', y)
                thisExp.addData('soundON', soundOnset)

                # Increment counters
                total_trial_nb += 1
                this_block_trial_nb += 1
                correct_trial_nb += 1

                # End the trial
                trial_ended = True
                # correct_trial.finished = True
                currentLoop.finished = True
                continueRoutine = False

            # Case 3: clicking but outside the correct window
            elif buttons[0]:

                # Display warning
                warning_text.text = dt_txt['text_outside']
                warning_text.draw()
                moose.setAutoDraw(False)
                win.flip()
                core.wait(1)

                # Enter results
                thisExp.addData('correct', 0)
                thisExp.addData('click', 'outside')
                thisExp.addData('clickTime', clickTime)
                thisExp.addData('click_x', x)
                thisExp.addData('click_y', y)
                thisExp.addData('soundON', None)

                # Increment counters
                total_trial_nb += 1
                this_block_trial_nb += 1

                # End the trial
                trial_ended = True
                continueRoutine = False

            # Case 4: no click for 1s
            elif moose_timer.getTime() > 1.0:

                # Display warning
                warning_text.text = dt_txt['text_no_click']
                warning_text.draw()
                moose.setAutoDraw(False)
                win.flip()
                core.wait(1)

                # Enter the results
                thisExp.addData('correct', 0)
                thisExp.addData('click', 'no_click')
                thisExp.addData('clickTime', None)
                thisExp.addData('click_x', None)
                thisExp.addData('click_y', None)
                thisExp.addData('soundON', None)

                # Increment counters
                total_trial_nb += 1
                this_block_trial_nb += 1

                # End the trial
                trial_ended = True
                continueRoutine = False
      End Routine:
        # get the image offset scheduled time and moose time
        if currentLoop.finished:
            thisExp.addData('scheduled_moose_time', soundOnset+1+jitter)
            thisExp.addData('moose_time', moose_timer.getTime())
        else:
            thisExp.addData('scheduled_moose_time', None)
            thisExp.addData('moose_time', None)
  Routine Scale
    CodeComponent code_4
      Code Type = Both
      Begin Routine:
        # Set initial position (x, y) in cm
        mouse.setPos((0, -8))

        # Initialize the click
        isPressed = False

        # Start timer
        scale_timer = core.Clock()
      Each Frame:
        continueRoutine = True   # <-- Keep running unless told otherwise

        if currentLoop.finished:

            # Draw everything
            scale_line.draw()
            for t in ticks: t.draw()
            general_label.draw()
            left_label.draw()
            center_label.draw()
            right_label.draw()
            red_x.draw()

            if not isPressed:
                x, y = mouse_scale.getPos()
                buttons_scale = mouse_scale.getPressed()
                x = x * scaling_x
                y = y * scaling_y

            # Check for clicks
            if buttons_scale[0] and red_x.opacity == 0.0:  # only accept first click
                if x_min <= x <= x_max and abs(y-y_pos) < 0.5:  # clicked near line
                    isPressed = True
                    red_x.pos = (x, y_pos)
                    red_x.opacity = 1.0
                    rating_time = scale_timer.getTime()
                    # response_time = tThisFlipGlobal

            # Hide X and end after 0.5s
            if red_x.opacity == 1.0 and (scale_timer.getTime() - rating_time) > 0.5:

                # In preparation of the next trial
                red_x.opacity = 0.0

                # Save response (in %)
                rating = (x - x_min) / (x_max - x_min) * 100
                thisExp.addData("rating", rating)
                thisExp.addData("rating_time", rating_time)

                # End
                isPressed = False
                continueRoutine = False

        else:

            thisExp.addData("rating", None)
            thisExp.addData("rating_time", None)
            continueRoutine = False
    MouseComponent mouse_scale
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Delay_for_adapt
    CodeComponent code_5
      Code Type = Both
      Each Frame:
        sound_delay = 0.250
        continueRoutine = False
      Each JS Frame:
        sound_delay = 0.25;
        continueRoutine = false;
  Routine Instruc_test
    TextComponent Instruction_test
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $dt_txt['text_instruction_test']
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_7
      Code Type = Both
      Begin Routine:
        # Define the block type, reinitialize counters, increment block number
        block_type = 'test'
        this_block_trial_nb = 0
        correct_trial_nb = 0
        block_nb +=1
  Routine Instruc_adapt
    TextComponent Insctruction_adapt
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $dt_txt['text_instruction_adapt']
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_6
      Code Type = Both
      Begin Routine:
        # Define the block type, reinitialize counters, increment block number
        block_type = 'adapt'
        this_block_trial_nb = 0
        correct_trial_nb = 0
        block_nb +=1
  Routine Finalize
    TextComponent GoodBye
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = $dt_txt['text_goodbye']
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    CodeComponent code_8
      Code Type = Both
      Begin Routine:
        import pandas as pd

        # First, ask ExperimentHandler to save as wide text
        thisExp.saveAsWideText(thisExp.dataFileName + '_raw.csv')

        # load, drop unwanted columns, and save a clean copy
        df = pd.read_csv(thisExp.dataFileName + '_raw.csv')
        df = df.drop(columns=[c for c in df.columns if '.this' in c], errors='ignore')
        df = df.drop(columns=['sound_delay'], errors='ignore')
        df.to_csv(thisExp.dataFileName + '_clean.csv', index=False)
    KeyboardComponent key_resp_4
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Pause1
    TextComponent pause_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $dt_txt['text_pause']
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    CodeComponent code_9
      Code Type = Both
      Begin Routine:
        # Hide cursor
        win.mouseVisible = False

        # Where we should be for each block (in min)
        # time_to_wait = [1, 3.1, 5.2, 9.1, 11.2, 15.1, 17.2] # 21.1
        time_to_wait = [1.5, 3.7, 5.8, 9.9, 12, 16.1, 18.2] # 21.1# time_to_wait = [0, 0, 0, 9, 11, 15, 17]

        # Where we should be in sec
        time_to_check = time_to_wait[block_nb]*60 + 10
      Each Frame:
        # How are we doing timewise?
        win.flip()
        time_diff = time_to_check - tThisFlipGlobal + tStimStartTime

        if time_diff < 5:
            core.wait(5)
            continueRoutine = False
  Routine Pause2
    SoundComponent sound_1
      saveStartStop = False
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_10
      Code Type = Both
      Each Frame:
        for countdown in [5, 4, 3, 2, 1]:

            warning_text.text = str(countdown)
            warning_text.draw()
            win.flip()
            core.wait(1)

        continueRoutine = False
  Routine Instruc_train
    TextComponent Instruction_train
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $dt_txt['text_instruction_adapt']
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_11
      Code Type = Both
      Begin Routine:
        # Define the block type, reinitialize counters, increment block number
        block_type = 'training'
        this_block_trial_nb = 0
        correct_trial_nb = 0
        block_nb +=1
  Routine Instruc
    TextComponent Insctruction
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $dt_txt['text_instruction']
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Pause30
    CodeComponent code_12
      Code Type = Both
      Begin Routine:
        tStimStartTime = tThisFlipGlobal
      Each Frame:
        for countdown in np.arange(29,0,-1):

            warning_text.text = str(countdown)
            warning_text.draw()
            win.flip()
            if countdown==5:
                sound_2.play()
            core.wait(1)

        continueRoutine = False
Flow
  Routine Initiate
  Routine Pause30
  Routine Instruc
  Routine Instruc_train
  LoopInitiator training_block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 10
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    LoopInitiator correct_trial_training loopType="TrialHandler"
      loopType = sequential
      nReps = 99
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      Routine Delay_for_adapt
      Routine Fixation
      Routine Moose
    LoopTerminator correct_trial_training
  LoopTerminator training_block
  Routine Pause1
  Routine Pause2
  LoopInitiator initial_adapt_block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine Instruc_adapt
    LoopInitiator adapt_block1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 42
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      LoopInitiator correct_trial_adapt1 loopType="TrialHandler"
        loopType = sequential
        nReps = 99
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        Routine Delay_for_adapt
        Routine Fixation
        Routine Moose
      LoopTerminator correct_trial_adapt1
    LoopTerminator adapt_block1
    Routine Pause1
    Routine Pause2
  LoopTerminator initial_adapt_block
  LoopInitiator test_and_adapt_block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine Instruc_test
    LoopInitiator test_block1 loopType="TrialHandler"
      conditionsFile = delay_test_block.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('sound_delay', 0.01)]),
        OrderedDict([('sound_delay', 0.01)]),
        OrderedDict([('sound_delay', 0.01)]),
        OrderedDict([('sound_delay', 0.0)]),
        OrderedDict([('sound_delay', 0.0)]),
        OrderedDict([('sound_delay', 0.0)]),
        OrderedDict([('sound_delay', 0.05)]),
        OrderedDict([('sound_delay', 0.05)]),
        OrderedDict([('sound_delay', 0.05)]),
        OrderedDict([('sound_delay', 0.1)]),
        OrderedDict([('sound_delay', 0.1)]),
        OrderedDict([('sound_delay', 0.1)]),
        OrderedDict([('sound_delay', 0.15)]),
        OrderedDict([('sound_delay', 0.15)]),
        OrderedDict([('sound_delay', 0.15)]),
        OrderedDict([('sound_delay', 0.2)]),
        OrderedDict([('sound_delay', 0.2)]),
        OrderedDict([('sound_delay', 0.2)]),
        OrderedDict([('sound_delay', 1.25)]),
        OrderedDict([('sound_delay', 1.25)]),
        OrderedDict([('sound_delay', 1.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)]),
        OrderedDict([('sound_delay', 0.25)])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
      LoopInitiator correct_trial_test1 loopType="TrialHandler"
        loopType = sequential
        nReps = 99
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        Routine Fixation
        Routine Moose
        Routine Scale
      LoopTerminator correct_trial_test1
    LoopTerminator test_block1
    Routine Pause1
    Routine Pause2
    Routine Instruc_adapt
    LoopInitiator adapt_block2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 42
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      LoopInitiator correct_trial_adapt2 loopType="TrialHandler"
        loopType = sequential
        nReps = 99
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        Routine Delay_for_adapt
        Routine Fixation
        Routine Moose
      LoopTerminator correct_trial_adapt2
    LoopTerminator adapt_block2
    Routine Pause1
    Routine Pause2
  LoopTerminator test_and_adapt_block
  Routine Instruc_test
  LoopInitiator test_block2 loopType="TrialHandler"
    conditionsFile = delay_test_block.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sound_delay', -1.0)]),
      OrderedDict([('sound_delay', -1.0)]),
      OrderedDict([('sound_delay', -1.0)]),
      OrderedDict([('sound_delay', 0.0)]),
      OrderedDict([('sound_delay', 0.0)]),
      OrderedDict([('sound_delay', 0.0)]),
      OrderedDict([('sound_delay', 0.05)]),
      OrderedDict([('sound_delay', 0.05)]),
      OrderedDict([('sound_delay', 0.05)]),
      OrderedDict([('sound_delay', 0.1)]),
      OrderedDict([('sound_delay', 0.1)]),
      OrderedDict([('sound_delay', 0.1)]),
      OrderedDict([('sound_delay', 0.15)]),
      OrderedDict([('sound_delay', 0.15)]),
      OrderedDict([('sound_delay', 0.15)]),
      OrderedDict([('sound_delay', 0.2)]),
      OrderedDict([('sound_delay', 0.2)]),
      OrderedDict([('sound_delay', 0.2)]),
      OrderedDict([('sound_delay', 1.25)]),
      OrderedDict([('sound_delay', 1.25)]),
      OrderedDict([('sound_delay', 1.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)]),
      OrderedDict([('sound_delay', 0.25)])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
    LoopInitiator correct_trial_test2 loopType="TrialHandler"
      loopType = sequential
      nReps = 99
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      Routine Fixation
      Routine Moose
      Routine Scale
    LoopTerminator correct_trial_test2
  LoopTerminator test_block2
  Routine Finalize
